WorkflowBuilder(Version=2.7.0)
Bonsai.Shaders.CreateWindow
  Width=900
  Height=900
  VSync=On
  SwapSync=false
  ClearColor=Black
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.TextureResources(Textures="")
-> Bonsai.Resources.LoadResources

GroupWorkflow Player
    DoubleProperty(Value=0)
    -> BehaviorSubject positionX

    DoubleProperty(Value=0)
    -> BehaviorSubject positionY

GroupWorkflow MovementPlayer
    SubscribeSubject movementY => #0
    SubscribeSubject positionY => #1
    #0, #1 -> WithLatestFrom
    -> Add
    -> MulticastSubject positionY

    SubscribeSubject movementX => #5
    SubscribeSubject positionX => #6
    #5, #6 -> WithLatestFrom
    -> Add
    -> MulticastSubject positionX

Disable GroupWorkflow JoystickListener
    Bonsai.Shaders.Input.GamePad(Index=0)
    -> MemberSelector(Selector=ThumbSticks.Left)
    -> MemberSelector(Selector=Y)
    -> GroupWorkflow DeadzoneConnection
        WorkflowInput Source1 => #0
        -> Condition
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> GreaterThan(Operand=FloatProperty(Value=0.05))
            -> WorkflowOutput
        -> Bonsai.Dsp.Rescale(Min=-1, Max=1, RangeMin=-0.1, RangeMax=0.1, RescaleType=Linear) => #2
        #0 -> Condition
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> LessThanOrEqual(Operand=FloatProperty(Value=0.05))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #4
        #2, #4 -> Merge
        -> WorkflowOutput
    -> BehaviorSubject movementY

    Bonsai.Shaders.Input.GamePad(Index=0)
    -> MemberSelector(Selector=ThumbSticks.Left)
    -> MemberSelector(Selector=X)
    -> GroupWorkflow DeadZoneCorrection
        WorkflowInput Source1 => #0
        -> Condition
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> LessThanOrEqual(Operand=FloatProperty(Value=0.05))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #2
        #0 -> Condition
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> GreaterThan(Operand=FloatProperty(Value=0.05))
            -> WorkflowOutput
        -> Bonsai.Dsp.Rescale(Min=-1, Max=1, RangeMin=-0.03, RangeMax=0.03, RescaleType=Linear) => #4
        #4, #2 -> Merge
        -> WorkflowOutput
    -> BehaviorSubject movementX

Disable GroupWorkflow JoystickListenerFlip
    Bonsai.Shaders.Input.GamePad(Index=0)
    -> MemberSelector(Selector=ThumbSticks.Left)
    -> MemberSelector(Selector=Y)
    -> GroupWorkflow DeadzoneConnection
        WorkflowInput Source1 => #0
        -> Condition
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> GreaterThan(Operand=FloatProperty(Value=0.05))
            -> WorkflowOutput
        -> Bonsai.Dsp.Rescale(Min=-1, Max=1, RangeMin=-0.1, RangeMax=0.1, RescaleType=Linear) => #2
        #0 -> Condition
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> LessThanOrEqual(Operand=FloatProperty(Value=0.05))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #4
        #2, #4 -> Merge
        -> WorkflowOutput
    -> Negate
    -> BehaviorSubject movementY

    Bonsai.Shaders.Input.GamePad(Index=0)
    -> MemberSelector(Selector=ThumbSticks.Left)
    -> MemberSelector(Selector=X)
    -> GroupWorkflow DeadzoneConnection
        WorkflowInput Source1 => #0
        -> Condition
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> GreaterThan(Operand=FloatProperty(Value=0.05))
            -> WorkflowOutput
        -> Bonsai.Dsp.Rescale(Min=-1, Max=1, RangeMin=-0.03, RangeMax=0.03, RescaleType=Linear) => #2
        #0 -> Condition
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> LessThanOrEqual(Operand=FloatProperty(Value=0.05))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #4
        #2, #4 -> Merge
        -> WorkflowOutput
    -> Negate
    -> BehaviorSubject movementX

GroupWorkflow JoystickListenerRotation
    Bonsai.Shaders.Input.GamePad(Index=0)
    -> MemberSelector(Selector=ThumbSticks.Left)
    -> MemberSelector(Selector=Y) => #2
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> GreaterThan(Operand=FloatProperty(Value=0.18))
        -> WorkflowOutput
    -> Bonsai.Dsp.Rescale(Min=-1, Max=1, RangeMin=-0.15, RangeMax=0.15, RescaleType=Linear) => #4
    #2 -> Condition
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThanOrEqual(Operand=FloatProperty(Value=0.18))
        -> WorkflowOutput
    -> DoubleProperty(Value=0) => #6
    #4, #6 -> Merge => #7
    Bonsai.Shaders.Input.GamePad(Index=0)
    -> MemberSelector(Selector=ThumbSticks.Left)
    -> MemberSelector(Selector=X) => #10
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> GreaterThan(Operand=FloatProperty(Value=0.18))
        -> WorkflowOutput
    -> Bonsai.Dsp.Rescale(Min=-1, Max=1, RangeMin=-0.15, RangeMax=0.15, RescaleType=Linear) => #12
    #10 -> Condition
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThanOrEqual(Operand=FloatProperty(Value=0.18))
        -> WorkflowOutput
    -> DoubleProperty(Value=0) => #14
    #12, #14 -> Merge => #15
    #7, #15 -> Zip
    -> Bonsai.Dsp.CartToPolar(AngleInDegrees=true) => #17
    -> MemberSelector(Selector=Item1)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #19
      Expression: Convert.ToSingle(it)
    #17 -> MemberSelector(Selector=Item2) => #20
    SubscribeSubject angleRotation
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    -> DoubleProperty(Value=45) => #23
    SubscribeSubject angleRotation
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> DoubleProperty(Value=0) => #26
    #23, #26 -> Merge
    -> PropertyMapping(Value) => #28
    #20, #28 -> Add(Operand=DoubleProperty(Value=0))
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #30
      Expression: Convert.ToSingle(it)
    #19, #30 -> Zip
    -> Bonsai.Dsp.PolarToCart(AngleInDegrees=true) => #32
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject movementY
    #32 -> MemberSelector(Selector=Item2)
    -> BehaviorSubject movementX

BooleanProperty(Value=false)
-> BehaviorSubject angleRotation

StringProperty(Value=C:\Users\teachinglab\Desktop\MarMarProject\S10\S10)
-> BehaviorSubject subjectInfo

IntProperty(Value=0)
-> BehaviorSubject trialNumber

Bonsai.IO.CsvReader(FileName=trials.csv, ListSeparator="", ScanPattern=%s, SkipRows=0)
-> Parse(Pattern="%d %d %d")
-> RepeatCount(Count=15) => #17
-> Bonsai.Numerics.Permutation => #18
#17 -> Bonsai.Numerics.Permutation => #19
#17 -> Bonsai.Numerics.Permutation => #20
#18, #19, #20 -> Merge => #21
-> ToList
-> BehaviorSubject listOfTrials => #23
-> Index(Operand=IntProperty(Value=0)) => #24
-> MemberSelector(Selector=Item1)
-> BehaviorSubject targetX
#24 -> MemberSelector(Selector=Item2)
-> BehaviorSubject targetY
#23 -> MemberSelector(Selector=Count)
-> Divide(Operand=IntProperty(Value=3))
-> PropertyMapping(Count) => #31
Timer(DueTime=PT0.5S, Period=PT0S)
-> SelectMany
    WorkflowInput Source1 => #0
    -> DoubleProperty(Value=0)
    -> MulticastSubject positionX => #2
    #0 -> DoubleProperty(Value=0)
    -> MulticastSubject positionY => #4
    #0 -> BooleanProperty(Value=true)
    -> MulticastSubject angleRotation => #6
    #2, #4, #6 -> Zip
    -> WorkflowOutput
-> SelectMany SetTrialParameters
    SubscribeSubject listOfTrials => #0
    SubscribeSubject trialNumber => #1
    WorkflowInput Source1 => #2
    #2, #0 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #4
    #2, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> PropertyMapping(Value) => #7
    #4, #7 -> Index(Operand=IntProperty(Value=239)) => #8
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject targetX => #10
    #8 -> MemberSelector(Selector=Item2)
    -> MulticastSubject targetY => #12
    #10, #12 -> Merge
    -> Last
    -> WorkflowOutput
-> SelectMany saveData
    WorkflowInput Source1
    -> SelectMany Game
        SubscribeSubject DrawStimuli => #0
        SubscribeSubject positionX => #1
        -> Bonsai.Dsp.Pow(Power=2) => #2
        SubscribeSubject positionY => #3
        -> Bonsai.Dsp.Pow(Power=2) => #4
        #2, #4 -> Zip
        -> Add
        -> Bonsai.Numerics.Sqrt
        -> GreaterThan(Operand=DoubleProperty(Value=0.9))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1) => #10
        #1, #3 -> Zip
        -> Timestamp => #12
        #12, #10 -> TakeUntil
        -> MulticastSubject coordinatesData
        SubscribeSubject targetX
        -> PropertyMapping(LocationX) => #16
        SubscribeSubject targetY
        -> PropertyMapping(LocationY) => #18
        SubscribeSubject positionX
        -> PropertyMapping(LocationX) => #20
        SubscribeSubject positionY
        -> PropertyMapping(LocationY) => #22
        SubscribeSubject positionX
        -> Bonsai.Numerics.Abs
        -> GreaterThan(Operand=DoubleProperty(Value=0.002)) => #25
        SubscribeSubject positionY
        -> Bonsai.Numerics.Abs
        -> GreaterThan(Operand=DoubleProperty(Value=0.002)) => #28
        #25, #28 -> Zip
        -> BitwiseOr
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=0) => #32
        SubscribeSubject positionX
        -> Bonsai.Numerics.Abs
        -> LessThanOrEqual(Operand=DoubleProperty(Value=0.002)) => #35
        SubscribeSubject positionY
        -> Bonsai.Numerics.Abs
        -> LessThanOrEqual(Operand=DoubleProperty(Value=0.002)) => #38
        #35, #38 -> Zip
        -> BitwiseOr
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=1) => #42
        #32, #42 -> Merge
        -> PropertyMapping(ColorA) => #44
        #0, #20, #22, #44 -> IncludeWorkflow => #45
          Path=BonVision:Primitives.DrawCircle.bonsai
          LocationX=-0.06919685
          LocationY=-0.90873915
          Layer=0
          Diameter=0.06
          ColorR=1
          ColorG=1
          ColorB=1
          ColorA=0
        #0, #16, #18 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.45, LocationY=-0.7794, Layer=0, Diameter=0.05, ColorR=1, ColorG=0.3, ColorB=0.3, ColorA=1) => #46
        #0 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0, LocationY=0, Layer=0, Diameter=1.8, ColorR=0.1, ColorG=0.1, ColorB=0.1, ColorA=0.8) => #47
        #47, #45, #46 -> Merge => #48
        #48, #10 -> TakeUntil
        -> Last
        -> WorkflowOutput
    -> Disable SelectMany BlankEnd
        WorkflowInput Source1 => #0
        Source2=#0 -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
        -> WorkflowOutput
    -> SelectMany Outcome
        SubscribeSubject DrawStimuli => #0
        Bonsai.Shaders.Timer(DueTime=PT1S) => #1
        SubscribeSubject targetX
        -> PropertyMapping(LocationX) => #3
        SubscribeSubject targetY
        -> PropertyMapping(LocationY) => #5
        SubscribeSubject positionX
        -> Take(Count=1) => #7
        SubscribeSubject positionY
        -> Take(Count=1) => #9
        #7, #9 -> Zip
        -> Bonsai.Dsp.CartToPolar(AngleInDegrees=true)
        -> MemberSelector(Selector=Item2) => #12
        DoubleProperty(Value=0.9) => #13
        #13, #12 -> Zip
        -> Bonsai.Dsp.PolarToCart(AngleInDegrees=true) => #15
        -> MemberSelector(Selector=Item1)
        -> PropertyMapping(LocationX) => #17
        #15 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(LocationY) => #19
        #0, #17, #19 -> IncludeWorkflow => #20
          Path=BonVision:Primitives.DrawCircle.bonsai
          LocationX=-0.06833358
          LocationY=-0.8974021
          Layer=0
          Diameter=0.06
          ColorR=0.3
          ColorG=1
          ColorB=0.3
          ColorA=1
        #0, #3, #5 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.45, LocationY=-0.7794, Layer=0, Diameter=0.05, ColorR=1, ColorG=0.3, ColorB=0.3, ColorA=1) => #21
        #0 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0, LocationY=0, Layer=0, Diameter=1.8, ColorR=0.1, ColorG=0.1, ColorB=0.1, ColorA=0.8) => #22
        #22, #20, #21 -> Merge => #23
        #23, #1 -> TakeUntil
        -> TakeLast(Count=1)
        -> WorkflowOutput

        Disable Zip
        -> Disable Timestamp
        -> Disable MulticastSubject coordinatesData
    -> WorkflowOutput

    BehaviorSubject<System.Reactive.Timestamped(System.Tuple(System.Double,System.Double))> coordinatesData => #5
    StringProperty(Value=_trial_.csv) => #6
    SubscribeSubject subjectInfo => #7
    #7, #6 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #10
    #5, #10 -> Bonsai.IO.CsvWriter(FileName=C:\Users\teachinglab\Desktop\MarMarProject\S10\S10_trial_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)
-> SelectMany UpdateTrialNumber => #36
    Unit
    -> DoubleProperty(Value=0) => #1
    -> MulticastSubject positionX => #2
    #1 -> MulticastSubject positionY => #3
    #1 -> MulticastSubject targetY => #4
    #1 -> MulticastSubject targetX => #5
    WorkflowInput Source1 => #6
    SubscribeSubject trialNumber => #7
    #6, #7 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> Take(Count=1)
    -> MulticastSubject trialNumber => #12
    #12, #5, #4, #3, #2 -> Zip
    -> Last
    -> WorkflowOutput
Timer(DueTime=PT0.5S, Period=PT0S)
-> SelectMany
    WorkflowInput Source1 => #0
    -> DoubleProperty(Value=0)
    -> MulticastSubject positionX => #2
    #0 -> DoubleProperty(Value=0)
    -> MulticastSubject positionY => #4
    #0 -> BooleanProperty(Value=false)
    -> MulticastSubject angleRotation => #6
    #2, #4, #6 -> Zip
    -> WorkflowOutput
-> SelectMany SetTrialParameters
    SubscribeSubject listOfTrials => #0
    SubscribeSubject trialNumber => #1
    WorkflowInput Source1 => #2
    #2, #0 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #4
    #2, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> PropertyMapping(Value) => #7
    #4, #7 -> Index(Operand=IntProperty(Value=119)) => #8
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject targetX => #10
    #8 -> MemberSelector(Selector=Item2)
    -> MulticastSubject targetY => #12
    #10, #12 -> Merge
    -> Last
    -> WorkflowOutput
-> SelectMany saveData
    WorkflowInput Source1
    -> SelectMany Game
        SubscribeSubject DrawStimuli => #0
        SubscribeSubject positionX => #1
        -> Bonsai.Dsp.Pow(Power=2) => #2
        SubscribeSubject positionY => #3
        -> Bonsai.Dsp.Pow(Power=2) => #4
        #2, #4 -> Zip
        -> Add
        -> Bonsai.Numerics.Sqrt
        -> GreaterThan(Operand=DoubleProperty(Value=0.9))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1) => #10
        #1, #3 -> Zip
        -> Timestamp => #12
        #12, #10 -> TakeUntil
        -> MulticastSubject coordinatesData
        SubscribeSubject targetX
        -> PropertyMapping(LocationX) => #16
        SubscribeSubject targetY
        -> PropertyMapping(LocationY) => #18
        SubscribeSubject positionX
        -> PropertyMapping(LocationX) => #20
        SubscribeSubject positionY
        -> PropertyMapping(LocationY) => #22
        FloatProperty(Value=1)
        -> PropertyMapping(ColorA) => #24
        #0, #20, #22, #24 -> IncludeWorkflow => #25
          Path=BonVision:Primitives.DrawCircle.bonsai
          LocationX=0.761856437
          LocationY=0.6189245
          Layer=0
          Diameter=0.06
          ColorR=1
          ColorG=1
          ColorB=1
          ColorA=1
        #0, #16, #18 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.7794, LocationY=0.45, Layer=0, Diameter=0.05, ColorR=1, ColorG=0.3, ColorB=0.3, ColorA=1) => #26
        #0 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0, LocationY=0, Layer=0, Diameter=1.8, ColorR=0.1, ColorG=0.1, ColorB=0.1, ColorA=0.8) => #27
        #27, #25, #26 -> Merge => #28
        #28, #10 -> TakeUntil
        -> Last
        -> WorkflowOutput
    -> Disable SelectMany BlankEnd
        WorkflowInput Source1 => #0
        Source2=#0 -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
        -> WorkflowOutput
    -> SelectMany Outcome
        SubscribeSubject DrawStimuli => #0
        Bonsai.Shaders.Timer(DueTime=PT1S) => #1
        SubscribeSubject targetX
        -> PropertyMapping(LocationX) => #3
        SubscribeSubject targetY
        -> PropertyMapping(LocationY) => #5
        SubscribeSubject positionX
        -> Take(Count=1) => #7
        SubscribeSubject positionY
        -> Take(Count=1) => #9
        #7, #9 -> Zip
        -> Bonsai.Dsp.CartToPolar(AngleInDegrees=true)
        -> MemberSelector(Selector=Item2) => #12
        DoubleProperty(Value=0.9) => #13
        #13, #12 -> Zip
        -> Bonsai.Dsp.PolarToCart(AngleInDegrees=true) => #15
        -> MemberSelector(Selector=Item1)
        -> PropertyMapping(LocationX) => #17
        #15 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(LocationY) => #19
        #0, #17, #19 -> IncludeWorkflow => #20
          Path=BonVision:Primitives.DrawCircle.bonsai
          LocationX=0.6985402
          LocationY=0.567487061
          Layer=0
          Diameter=0.06
          ColorR=0.3
          ColorG=1
          ColorB=0.3
          ColorA=1
        #0, #3, #5 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.7794, LocationY=0.45, Layer=0, Diameter=0.05, ColorR=1, ColorG=0.3, ColorB=0.3, ColorA=1) => #21
        #0 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0, LocationY=0, Layer=0, Diameter=1.8, ColorR=0.1, ColorG=0.1, ColorB=0.1, ColorA=0.8) => #22
        #22, #20, #21 -> Merge => #23
        #23, #1 -> TakeUntil
        -> TakeLast(Count=1)
        -> WorkflowOutput

        Disable Zip
        -> Disable Timestamp
        -> Disable MulticastSubject coordinatesData
    -> WorkflowOutput

    BehaviorSubject<System.Reactive.Timestamped(System.Tuple(System.Double,System.Double))> coordinatesData => #5
    StringProperty(Value=_trial_.csv) => #6
    SubscribeSubject subjectInfo => #7
    #7, #6 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #10
    #5, #10 -> Bonsai.IO.CsvWriter(FileName=C:\Users\teachinglab\Desktop\MarMarProject\S10\S10_trial_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)
-> SelectMany UpdateTrialNumber => #41
    Unit
    -> DoubleProperty(Value=0) => #1
    -> MulticastSubject positionX => #2
    #1 -> MulticastSubject positionY => #3
    #1 -> MulticastSubject targetY => #4
    #1 -> MulticastSubject targetX => #5
    WorkflowInput Source1 => #6
    SubscribeSubject trialNumber => #7
    #6, #7 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> Take(Count=1)
    -> MulticastSubject trialNumber => #12
    #12, #5, #4, #3, #2 -> Zip
    -> Last
    -> WorkflowOutput
#41, #31 -> RepeatCount(Count=120) => #42
#23 -> MemberSelector(Selector=Count)
-> Divide(Operand=IntProperty(Value=3))
-> PropertyMapping(Count) => #45
#36, #45 -> RepeatCount(Count=120) => #46
#23 -> MemberSelector(Selector=Count)
-> Divide(Operand=IntProperty(Value=3))
-> PropertyMapping(Count) => #49
Timer(DueTime=PT0.5S, Period=PT0S)
-> SelectMany
    WorkflowInput Source1 => #0
    -> DoubleProperty(Value=0)
    -> MulticastSubject positionX => #2
    #0 -> DoubleProperty(Value=0)
    -> MulticastSubject positionY => #4
    #0 -> BooleanProperty(Value=false)
    -> MulticastSubject angleRotation => #6
    #2, #4, #6 -> Zip
    -> WorkflowOutput
-> SelectMany SetTrialParameters
    SubscribeSubject listOfTrials => #0
    SubscribeSubject trialNumber => #1
    WorkflowInput Source1 => #2
    #2, #0 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #4
    #2, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> PropertyMapping(Value) => #7
    #4, #7 -> Index(Operand=IntProperty(Value=359)) => #8
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject targetX => #10
    #8 -> MemberSelector(Selector=Item2)
    -> MulticastSubject targetY => #12
    #10, #12 -> Merge
    -> Last
    -> WorkflowOutput
-> SelectMany saveData
    WorkflowInput Source1
    -> SelectMany Game
        SubscribeSubject DrawStimuli => #0
        SubscribeSubject positionX => #1
        -> Bonsai.Dsp.Pow(Power=2) => #2
        SubscribeSubject positionY => #3
        -> Bonsai.Dsp.Pow(Power=2) => #4
        #2, #4 -> Zip
        -> Add
        -> Bonsai.Numerics.Sqrt
        -> GreaterThan(Operand=DoubleProperty(Value=0.9))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1) => #10
        #1, #3 -> Zip
        -> Timestamp => #12
        #12, #10 -> TakeUntil
        -> MulticastSubject coordinatesData
        SubscribeSubject targetX
        -> PropertyMapping(LocationX) => #16
        SubscribeSubject targetY
        -> PropertyMapping(LocationY) => #18
        SubscribeSubject positionX
        -> PropertyMapping(LocationX) => #20
        SubscribeSubject positionY
        -> PropertyMapping(LocationY) => #22
        FloatProperty(Value=1)
        -> PropertyMapping(ColorA) => #24
        #0, #20, #22, #24 -> IncludeWorkflow => #25
          Path=BonVision:Primitives.DrawCircle.bonsai
          LocationX=-0.27086246
          LocationY=-0.8941404
          Layer=0
          Diameter=0.06
          ColorR=1
          ColorG=1
          ColorB=1
          ColorA=1
        #0, #16, #18 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.2329, LocationY=-0.8693, Layer=0, Diameter=0.05, ColorR=1, ColorG=0.3, ColorB=0.3, ColorA=1) => #26
        #0 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0, LocationY=0, Layer=0, Diameter=1.8, ColorR=0.1, ColorG=0.1, ColorB=0.1, ColorA=0.8) => #27
        #27, #25, #26 -> Merge => #28
        #28, #10 -> TakeUntil
        -> Last
        -> WorkflowOutput
    -> Disable SelectMany BlankEnd
        WorkflowInput Source1 => #0
        Source2=#0 -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
        -> WorkflowOutput
    -> SelectMany Outcome
        SubscribeSubject DrawStimuli => #0
        Bonsai.Shaders.Timer(DueTime=PT1S) => #1
        SubscribeSubject targetX
        -> PropertyMapping(LocationX) => #3
        SubscribeSubject targetY
        -> PropertyMapping(LocationY) => #5
        SubscribeSubject positionX
        -> Take(Count=1) => #7
        SubscribeSubject positionY
        -> Take(Count=1) => #9
        #7, #9 -> Zip
        -> Bonsai.Dsp.CartToPolar(AngleInDegrees=true)
        -> MemberSelector(Selector=Item2) => #12
        DoubleProperty(Value=0.9) => #13
        #13, #12 -> Zip
        -> Bonsai.Dsp.PolarToCart(AngleInDegrees=true) => #15
        -> MemberSelector(Selector=Item1)
        -> PropertyMapping(LocationX) => #17
        #15 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(LocationY) => #19
        #0, #17, #19 -> IncludeWorkflow => #20
          Path=BonVision:Primitives.DrawCircle.bonsai
          LocationX=-0.260927945
          LocationY=-0.8613458
          Layer=0
          Diameter=0.06
          ColorR=0.3
          ColorG=1
          ColorB=0.3
          ColorA=1
        #0, #3, #5 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.2329, LocationY=-0.8693, Layer=0, Diameter=0.05, ColorR=1, ColorG=0.3, ColorB=0.3, ColorA=1) => #21
        #0 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0, LocationY=0, Layer=0, Diameter=1.8, ColorR=0.1, ColorG=0.1, ColorB=0.1, ColorA=0.8) => #22
        #22, #20, #21 -> Merge => #23
        #23, #1 -> TakeUntil
        -> TakeLast(Count=1)
        -> WorkflowOutput

        Disable Zip
        -> Disable Timestamp
        -> Disable MulticastSubject coordinatesData
    -> WorkflowOutput

    BehaviorSubject<System.Reactive.Timestamped(System.Tuple(System.Double,System.Double))> coordinatesData => #5
    StringProperty(Value=_trial_.csv) => #6
    SubscribeSubject subjectInfo => #7
    #7, #6 -> Zip
    -> Add
    -> PropertyMapping(FileName) => #10
    #5, #10 -> Bonsai.IO.CsvWriter(FileName=C:\Users\teachinglab\Desktop\MarMarProject\S10\S10_trial_.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)
-> SelectMany UpdateTrialNumber => #54
    Unit
    -> DoubleProperty(Value=0) => #1
    -> MulticastSubject positionX => #2
    #1 -> MulticastSubject positionY => #3
    #1 -> MulticastSubject targetY => #4
    #1 -> MulticastSubject targetX => #5
    WorkflowInput Source1 => #6
    SubscribeSubject trialNumber => #7
    #6, #7 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> Take(Count=1)
    -> MulticastSubject trialNumber => #12
    #12, #5, #4, #3, #2 -> Zip
    -> Last
    -> WorkflowOutput
#54, #49 -> RepeatCount(Count=120) => #55
#42, #46, #55 -> Concat
-> WorkflowOutput
StringProperty(Value=_trialStructure.csv) => #58
SubscribeSubject subjectInfo => #59
#59, #58 -> Zip
-> Add
-> PropertyMapping(FileName) => #62
#62, #21 -> Bonsai.IO.CsvWriter(FileName=C:\Users\teachinglab\Desktop\MarMarProject\S10\S10_trialStructure.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
-> BehaviorSubject DrawStimuli

SubscribeSubject trialNumber
